'CR1000x Series Datalogger



'Comments and Notes
' All sensor heights are set in inches
' Set forceRead = 1 to force a set of snow depth readings
' Set luftCalib = 1 to perform the luft calibration...this will set the sensor to read snow depth based on target assuming currently no snow.
' Set Actual sensor heights in inches in the public table, changes will be retained under loss of power, reset during program upload
' Change the constant "logInterval = 15" to the number of minutes between reading, currently 15 minutes
' To calibrate the luft on-site set the luftCalib variable to 1 for one program scan through the top of the minute
'      calibration takes a while, but will zero out snow depth on the current target



'Sommer sensor
'RS232 communication
'Sommer Wiring
' Pink  - C7
' Red   - C8
' Black - G
' Brown - 12v

'Luft Sensor
'SDI-12 communication
'luft Wiring
' Brown  - SW12_2
' White  - G
' Yellow - C1

'LM20 sensor
'RS232 3.3v Communication
'LM20 Wiring
'Powered 100% of the time
' Red    - 5v
' Black  - G
' Yellow - C6
' White  - C5

'Judd sensor
'Analog Communication
'Judd Sensor Wiring
'Powers on and off during scan cycle
' Green - C2
' Red   - 12V
' Black - G
' Brown - SE1
' White - SE2

'LaserTech sensor
'RS232 Communication
'LaserTech S200 Wiring
'Powers on and off during scan cycle
' Pink  - SW12_1
' Black - GND
' Brown - C4
' Blue  - C3



'Constants
Const LM20port = comC5
Const Laserport = comC3
Const SommerPort = ComC7
Const logInterval = 15

'Public variables
Public numGood,makeRead,forceRead,progInit
Public PTemp, batt_volt
Public raw As String * 100

'Variables for LaserTech S200
Public S200_distance_first,S200_distance_strongest,S200_distance_last,s200SnowDepth
Public yTilt,angle

'Variables for Judd Sensor
Public juddSnowDepth,juddDistance,juddTemperature

'Variables for LM20
Public lm20Distance,lm20SnowDepth
Public lm20Split(2) As String * 10

'Variables for Luft
Public luftTemp As String * 100
Public luftSplit(5) As String * 10
Public luftSnowDepth,luftDistance,luftAngle,luftCalib,luftAmbTemperature

'Variables for Sommer
Public sommerDistance,sommerSnowDepth,sommerTemperature

'Variables for leddarOne
'Public readLeddarOne
'Public leddar_one(10)      'Array for leddar_one returned data

'Variable for setup table
Const numSetupVars = 10
Public setupVars(numSetupVars)
Alias setupVars(1)=s200Height
Alias setupVars(2)=juddHeight
Alias setupVars(3)=lm20Height
Alias setupVars(4)=sommerHeight
Alias setupVars(5)=ledderOneHeight
Alias setupVars(6)=ledderVueHeight

Public SplitResult(7) As String * 10

'----------------------------Data Tables---------------------------------

'Define Data Tables
DataTable (laserS200,1,-1)
  TableFile ("USB:"+Status.SerialNumber+"_LaserS200",8,-1,0,0,Min,0,0)
  Minimum (1,batt_volt,FP2,0,False)
  Sample (1,PTemp,FP2)
  Sample (1,S200_distance_first,FP2)
  Sample (1,S200_distance_strongest,FP2)
  Sample (1,S200_distance_last,FP2)
  Sample (1,angle,FP2)
  Sample (1,s200SnowDepth,FP2)
EndTable

DataTable (luft,1,-1)
  TableFile ("USB:"+Status.SerialNumber+"_Lufft",8,-1,0,0,Min,0,0)
  Sample (1,luftDistance,FP2)
  Sample (1,luftAngle,FP2)
  Sample (1,luftSnowDepth,FP2)
  Sample (1,luftAmbTemperature,FP2)
EndTable

DataTable (sommer,1,-1)
  TableFile ("USB:"+Status.SerialNumber+"_Sommer",8,-1,0,0,Min,0,0)
  Sample (1,sommerDistance,FP2)
  Sample (1,sommerSnowDepth,FP2)
  Sample (1,sommerTemperature,FP2)
EndTable

DataTable (judd,1,-1)
  TableFile ("USB:"+Status.SerialNumber+"_Judd",8,-1,0,0,Min,0,0)
  Sample (1,juddDistance,FP2)
  Sample (1,juddSnowDepth,FP2)
  Sample (1,juddTemperature,FP2)
EndTable

DataTable (lm20,1,-1)
  TableFile ("USB:"+Status.SerialNumber+"_LW20",8,-1,0,0,Min,0,0)
  Sample (1,lm20Distance,FP2)
  Sample (1,lm20SnowDepth,FP2)
EndTable


'Save Setup Variables here
DataTable(Setup,1,1)
  DataInterval(5,5,Min,1)
  Sample(numSetupVars,setupVars(1),FP2)
EndTable


'--------------------Main Program---------------------------------------
BeginProg
  progInit = 0
  If progInit < 1 Then
    progInit = 1
    GetRecord(setupVars,Setup,1)
    If Round(s200Height,0) = NAN Then 'table of setup vals is NANs
      s200Height = 200
      juddHeight = 200
      lm20Height = 200
      sommerHeight = 200
      ledderOneHeight = 200
      ledderVueHeight = 200
    EndIf
  EndIf

  SerialOpen (Laserport,115200,0,0,200)
  SerialOpen (LM20port,115200,16,0,50,2)
  SerialOpen (SommerPort,9600,0,0,50,0)



  Scan (1,min,0,0)

    If luftCalib = 1 Then
      SDI12Recorder (luftTemp,C1,0,"0XLARV!",1.0,0,,2)
      luftCalib = 0
    EndIf

    'Set forceRead to 1 to force a set of measurements
    If forceRead = 1 Then
      makeRead = 1
    EndIf

    If TimeIntoInterval(0,logInterval,min) Then
      makeRead = 1
      forceRead = 0
    EndIf

    'save setup every five minutes
    If IfTime(1,5,Min) Then
      CallTable(Setup)
    EndIf
    CallTable(setup)

    'Turn on Luft sensor
    SW12 (SW12_2,1 )
    

    If makeRead = 1 Then
      'Turn on LaserTech S200
      SW12 (SW12_1,1 )


      PanelTemp (PTemp,250)
      Battery (batt_volt)

      'Read LM20 Sensor
      SerialFlush(LM20port)
      SerialOut(LM20port,"?ldl"+CHR(13)+CHR(10),"",0,0)
      SerialIn (raw,LM20port,100,10,100)
      SplitStr (lm20Split(1),raw,":",2,7)
      lm20Distance = lm20Split(2)
      lm20Distance = lm20Distance * 39.3701
      lm20SnowDepth = lm20Height - lm20Distance


      'Read Judd Sensor
      PortSet (C2,1)
      Delay(0,1,Sec)
      VoltDiff(juddTemperature,1,mv5000,1,0,0,250,-0.2,-273)
      Delay(0,2,Sec)
      VoltDiff(juddDistance,1,mv5000,1,0,0,250,-0.19685,0)
      juddSnowDepth = juddHeight - juddDistance
      PortSet(C2,0)
      'ModbusMaster (readLeddarOne,Leddarport,19200,1,1,leddar_one,20,10,3,100)

      'Read luft Sensor
      SDI12Recorder (luftTemp,C1,0,"M!",1.0,0)
      Delay(0,1,Sec)
      SDI12Recorder (luftTemp,C1,0,"D0!",1.0,0,,2
      SplitStr (luftSplit,luftTemp,"+",5,7)
      luftSnowDepth = luftSplit(3)
      luftAmbTemperature = luftSplit(5)
      Delay(0,1,Sec)
      SDI12Recorder (luftTemp,C1,0,"D1!",1.0,0,,2)
      SplitStr (luftSplit,luftTemp,"+",5,7)
      luftAngle = luftSplit(4)
      Delay(0,1,Sec)
      SDI12Recorder (luftTemp,C1,0,"M2!",1.0,0)
      Delay(0,1,Sec)
      SDI12Recorder (luftTemp,C1,0,"D1!",1.0,0,,2)
      SplitStr (luftSplit,luftTemp,"+",5,7)
      luftDistance = luftSplit(2)

      'Read Sommer Sensor
      SerialFlush(SommerPort)
      SerialOut(SommerPort,":00;","",0,0)
      SerialIn (raw,SommerPort,100,10,100)
      SplitStr (SplitResult(1),raw," ",2,7)
      sommerDistance = SplitResult(1)
      sommerTemperature = SplitResult(2)
      sommerDistance = sommerDistance * 0.0393701
      sommerSnowDepth = sommerHeight - sommerDistance

      'Read Laser Tech Sensor
      SerialFlush(Laserport)
      SerialOut(Laserport,"$DM,7"+CHR(13)+CHR(10),"",0,0)
      'DM4 - Last
      'DM2 - First
      'DM3 - Strongest
      'DM7 - First,strongest,last
      Delay(0,1,2)
      SerialOut(Laserport,"$LS,2"+CHR(13)+CHR(10),"",0,0)
      'LS0 - Do not report weaker
      'LS1 - Report weaker if no strong
      'LS2 - Always report weaker
      Delay(0,1,2)
      SerialOut(Laserport,"$MM,0"+CHR(13)+CHR(10),"",0,0)
      'MM0 - Standard Range
      'MM1 - Extended Range
      'MM2 - Itelligent Range
      Delay(0,1,2)
      SerialFlush(Laserport)

      'TAKE FIRST SET OF MEASUREMENTS
      SerialOut(Laserport,"$GO,5"+CHR(13)+CHR(10),"",0,0)
      'example laser output  "$DM,L,6.40,F,0,4-1072*9E16"
      'Delay(0,1,2)
      SerialIn (raw,Laserport,100,10,100)
      SerialIn (raw,Laserport,100,10,100)
      SerialIn (raw,Laserport,100,10,100)
      SerialIn (raw,Laserport,100,10,100)
      SerialIn (raw,Laserport,100,10,100)

      SplitStr (SplitResult(1),raw,",",7,7)
      If SplitResult(1) = "$DM" Then
        S200_distance_first = SplitResult(3)
        S200_distance_first = S200_distance_first * 39.3701
        S200_distance_strongest = SplitResult(4)
        S200_distance_strongest  = S200_distance_strongest * 39.3701
        S200_distance_last = SplitResult(5)
        S200_distance_last = S200_distance_last * 39.3701
        s200SnowDepth = s200Height - S200_distance_last
        numGood = numGood + 1
      Else
        S200_distance_first = 9999
        S200_distance_strongest = 9999
        S200_distance_last = 9999
      EndIf

      SW12 (SW12_1,0)


      CallTable laserS200
      CallTable sommer
      CallTable luft
      CallTable lm20
      CallTable judd
      makeRead = 0
    EndIf

  NextScan


EndProg
